includeFile = /home/ghamad/topas/examples/250MeV_Sim/TC_0.04_0.02.txt


# ----- World dimensions
s:Ge/World/Material  = "Air"
d:Ge/World/HLX       = 6.5 cm
d:Ge/World/HLY       = 4 cm 
d:Ge/World/HLZ       = 42. cm
#b:Ge/World/Invisible = "TRUE"

#---- Beam position (S)
s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=Tf/XPositionIncreasing/Value cm
d:Ge/BeamPosition/TransY=Tf/YPositionIncreasing/Value cm
d:Ge/BeamPosition/TransZ=0.42 m
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg
# Create a position that increases every 1 s (each time the X scan is completed).
s:Tf/XPositionIncreasing/Function = "Step"
dv:Tf/XPositionIncreasing/Times   = 225 1 2
3
4
5
6
7
8
9
10
11
12
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224
225 s
dv:Tf/XPositionIncreasing/Values  = 225 -1.75
-1.75
-1.75
-1.75
-1.75
-1.75
-1.75
-1.75
-1.75
-1.75
-1.75
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1.75
1.75 cm


# Create a position that increases every 1 s (each time the Y scan is completed).
s:Tf/YPositionIncreasing/Function = "Step"
dv:Tf/YPositionIncreasing/Times   = 225 1. 2
3
4
5
6
7
8
9
10
11
12
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224
225 s
dv:Tf/YPositionIncreasing/Values  = 225 -1.75
-1.5
-1.25
-1
-0.75
-0.5
-0.25
0
0.25
0.5
0.75
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1.5
1.75 cm

# Declare that the simulation should contain 225 runs.
i:Tf/NumberOfSequentialTimes = 225

# Specify an end time for the run sequence.
d:Tf/TimelineEnd = 225 s

# Set verbosity to get more information about the runs.
i:Tf/Verbosity = 2

b:Ma/MyWater/BuildFromMaterials = "True"
sv:Ma/MyWater/Components= 1 "G4_WATER"
uv:Ma/MyWater/Fractions= 1 1
d:Ma/MyWater/Density=1.0133 g/cm3
s:Ma/MyWater/DefaultColor="indigo"
#sv:Ph/Default/LayeredMassGeometryWorlds = 2 "WaterPhantom" "WaterBox0" 

#--- water phantom
s:Ge/WaterPhantom/Parent     = "World"
s:Ge/WaterPhantom/Type       =  "TsBox"
s:Ge/WaterPhantom/Material   = "G4_WATER"
d:Ge/WaterPhantom/HLX        = 6.4 cm
d:Ge/WaterPhantom/HLY        = 4 cm 
d:Ge/WaterPhantom/HLZ        = 15 cm
d:Ge/WaterPhantom/TransX     = 0 cm
d:Ge/WaterPhantom/TransY     = 0. cm
d:Ge/WaterPhantom/TransZ     = -15 cm
d:Ge/WaterPhantom/RotX       = 0. deg
d:Ge/WaterPhantom/RotY       = 0. deg
d:Ge/WaterPhantom/RotZ       = 0. deg
s:Ge/WaterPhantom/DrawingStyle = "Solid"
s:Ge/WaterPhantom/Color        = "transparentblue"
#b:Ge/WaterPhantom/isParallel = "True" 

#--- water Box0
s:Ge/WaterBox0/Parent     = "World"
s:Ge/WaterBox0/Type       =  "TsBox"
s:Ge/WaterBox0/Material   = "G4_WATER"
d:Ge/WaterBox0/HLX        = 0.05 cm 
d:Ge/WaterBox0/HLY        = 1.5748 cm 
d:Ge/WaterBox0/HLZ        = 10. cm  
d:Ge/WaterBox0/TransX     = 0. cm
d:Ge/WaterBox0/TransY     = 0. cm
d:Ge/WaterBox0/TransZ     = -10. cm
d:Ge/WaterBox0/RotX       = 0. deg
d:Ge/WaterBox0/RotY       = 0. deg
d:Ge/WaterBox0/RotZ       = 0. deg
s:Ge/WaterBox0/DrawingStyle = "Solid"
s:Ge/WaterBox0/Color        = "blue"
#b:Ge/WaterBox0/isParallel = "True"

#----- Primary: Emittance beam 
s:So/ProtonSource/Type = "emittance"
s:So/ProtonSource/Component                = "BeamPosition" 
s:So/ProtonSource/BeamParticle             = "proton"
d:So/ProtonSource/BeamEnergy               = 248.8 MeV
u:So/ProtonSource/BeamEnergySpread         = 0.2
s:So/ProtonSource/Distribution = "BiGaussian"
d:So/ProtonSource/SigmaX           = 2.54941 mm                
u:So/ProtonSource/SigmaXprime      = 0.00305443             
u:So/ProtonSource/CorrelationX     = 0.417838            
d:So/ProtonSource/SigmaY           = 2.54941 mm              
u:So/ProtonSource/SigmaYprime      = 0.00305443              
u:So/ProtonSource/CorrelationY     = 0.417838  

#---- Scorring
s:Sc/DoseAtPhantom_Seed0/Quantity                       = "DoseToMedium"
s:Sc/DoseAtPhantom_Seed0/Component                      = "WaterBox0"
#b:Sc/DoseAtPhantom_Seed0/OutputToConsole                = "TRUE"
s:Sc/DoseAtPhantom_Seed0/IfOutputFileAlreadyExists      = "Increment"
#sv:Sc/DoseAtPhantom_Seed0/Report = 8 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Min" "Max"
i:Sc/DoseAtPhantom_Seed0/ZBins=1000
i:Sc/DoseAtPhantom_Seed0/Xbins=1
i:Sc/DoseAtPhantom_Seed0/Ybins=500

#---- Sequence
i:Ts/NumberOfThreads = 80 # defaults to 1
b:Ts/PauseBeforeQuit = "False"
b:Ge/QuitIfOverlapDetected= "True"
i:So/ProtonSource/NumberOfHistoriesInRun = 100
i:Ts/ShowHistoryCountAtInterval = 100
i:Ts/Seed = 1

#---- physics
sv:Ph/Default/Modules   = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"

#--------Defime the transparent colors--------------#
iv:Gr/Color/transparentblue    = 4 50 50 255 80
iv:Gr/Color/transparentgreen  = 4 0 255 0 150
iv:Gr/Color/transparentyellow = 4 255 255 0 100
iv:Gr/Color/transparentred    = 4 255 0 0 100


#----- View
#s:Gr/ViewA/Type           = "OpenGL"
#sv:Gr/ViewA/VisibleWorlds = 1 "All"
#i:Gr/ViewA/WindowSizeX    = 900
#i:Gr/ViewA/WindowSizeY    = 900
#b:Gr/ViewA/IncludeAxes      = "True"
#d:Gr/ViewA/Theta            = 90 deg
#d:Gr/ViewA/Phi              = 0 deg
#s:Gr/ViewA/Projection       = "Perspective"
#d:Gr/ViewA/PerspectiveAngle = 0 deg
#u:Gr/ViewA/Zoom             = 1.5

